CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:44
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^W(?P<Well>\d{4})F(?P<Field>\d{4})T(?P<Time>\d{4})Z(?P<Zslice>\d{3})C(?P<ChannelNumber>\d+)(?:_(?P<Suffix>seg|dn))?\.(?P<Ext>tif|png)$
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:or (file does contain "C1.tif") (file does contain "C2.tif") (file does endwith "_seg.png")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "seg") (directory does contain "soma")
    Name to assign these images:soma
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C1.tif")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2.tif")
    Name to assign these images:BFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "seg") (directory does contain "neurite")
    Name to assign these images:neurite
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:soma
    Name the output object:soma
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:6|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
    Select the input image:neurite
    Name the output object:neurite
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

FlagImage:[module_num:7|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Count_soma
    Flag images based on low values?:Yes
    Minimum value:1.0
    Flag images based on high values?:No
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    Ignore flag skips on last cycle?:No

CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:BF
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:55
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:BF
    Name the output image:IllumCorrBF
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ConvertObjectsToImage:[module_num:10|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
    Select the input objects:neurite
    Name the output image:neurite_binary
    Select the color format:Binary (black & white)
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
Closing:[module_num:11|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
    Select the input image:neurite_binary
    Name the output image:ClosingNeurite
    Structuring element:disk,7

IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:soma
    Name the objects to be identified:SomaAndNeuritesMerged
    Select the method to identify the secondary objects:Propagation
    Select the input image:ClosingNeurite
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:450
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    Thresholding method:Otsu

MorphologicalSkeleton:[module_num:13|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
    Select the input image:ClosingNeurite
    Name the output image:ClosingMorphologicalSkeleton

IdentifySecondaryObjects:[module_num:14|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
    Select the input objects:soma
    Name the objects to be identified:SomaAndSkelNeuritesMerged
    Select the method to identify the secondary objects:Propagation
    Select the input image:ClosingMorphologicalSkeleton
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:450
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:15|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
    Select the input objects:SomaAndNeuritesMerged
    Name the output image:SomaNeuriteUint16
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:16|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
    Select the input objects:SomaAndNeuritesMerged
    Name the output image:SomaNeuriteGrayscale
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:17|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
    Select the input objects:SomaAndNeuritesMerged
    Name the output image:SomaNeuriteColor
    Select the color format:Color
    Select the colormap:tab20

ConvertObjectsToImage:[module_num:18|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
    Select the input objects:SomaAndSkelNeuritesMerged
    Name the output image:SomaSkelNeuriteUint16
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:19|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
    Select the input objects:SomaAndSkelNeuritesMerged
    Name the output image:SomaSkelNeuriteGrayscale
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:20|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
    Select the input objects:SomaAndSkelNeuritesMerged
    Name the output image:SomaSkelNeuriteColor
    Select the color format:Color
    Select the colormap:tab20

MeasureObjectSkeleton:[module_num:21|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
    Select the seed objects:soma
    Select the skeletonized image:neurite_binary
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:Yes
    Intensity image:BFP
    File output directory:Default Output Folder|Z:\Active_Users_Data\Neil\Analyses\Results\dry\xenium\src\3_cellprofiler\output
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectSizeShape:[module_num:22|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
    Select object sets to measure:SomaAndNeuritesMerged, SomaAndSkelNeuritesMerged, neurite, soma
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:23|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
    Select images to measure:BF, BFP, IllumCorrBF
    Select objects to measure:SomaAndNeuritesMerged, SomaAndSkelNeuritesMerged, neurite, soma

MeasureObjectOverlap:[module_num:24|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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:soma
    Select the objects to be tested for overlap against the ground truth:neurite
    Calculate earth mover's distance?:Yes
    Maximum # of points:250
    Point selection method:Skeleton
    Maximum distance:250
    Penalize missing pixels:Yes

MeasureObjectNeighbors:[module_num:25|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
    Select objects to measure:soma
    Select neighboring objects to measure:neurite
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ObjectNeighborCount
    Select colormap:viridis
    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureTexture:[module_num:26|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
    Select images to measure:BF, BFP, IllumCorrBF
    Select objects to measure:SomaAndNeuritesMerged, SomaAndSkelNeuritesMerged, neurite, soma
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureGranularity:[module_num:27|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
    Select images to measure:BF, BFP, IllumCorrBF
    Measure within objects?:Yes
    Select objects to measure:SomaAndNeuritesMerged, SomaAndSkelNeuritesMerged, neurite, soma
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureImageQuality:[module_num:28|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureImageSkeleton:[module_num:29|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
    Select an image to measure:neurite

MeasureImageIntensity:[module_num:30|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
    Select images to measure:BF, BFP, IllumCorrBF
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:SomaAndNeuritesMerged, SomaAndSkelNeuritesMerged
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:31|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
    Select images to measure:BF, BFP, IllumCorrBF
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureImageAreaOccupied:[module_num:32|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
    Measure the area occupied by:Objects
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    Select object sets to measure:SomaAndNeuritesMerged, SomaAndSkelNeuritesMerged, neurite, soma

MeasureObjectIntensityMultichannel:[module_num:33|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
    Select images to measure:BF, BFP, IllumCorrBF
    Select objects to measure:SomaAndNeuritesMerged, SomaAndSkelNeuritesMerged, neurite, soma
    How many channels does the image have?:1

MeasureObjectIntensityDistribution:[module_num:34|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
    Select images to measure:BF, BFP, IllumCorrBF
    Hidden:3
    Hidden:3
    Hidden:1
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:neurite
    Object to use as center?:Edges of other objects
    Select objects to use as centers:soma
    Select objects to measure:soma
    Object to use as center?:These objects
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    Select objects to measure:SomaAndNeuritesMerged
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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    Scale the bins?:Yes
    Number of bins:5
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    Scale the bins?:Yes
    Number of bins:6
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    Image:BFP
    Objects to display:SomaAndNeuritesMerged
    Number of bins:4
    Measurement:Fraction at Distance
    Color map:Blues
    Save display as image?:Yes
    Output image name:Heatmap_BFP_Int_Distr

SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:Heatmap_BFP_Int_Distr
    Select method for constructing file names:From image filename
    Select image name for file prefix:BFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_HeatmapBFPInt
    Saved file format:png
    Output file location:Default Output Folder sub-folder|visualizations
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:BranchpointImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:neurite
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NeuriteBranchpts
    Saved file format:png
    Output file location:Default Output Folder sub-folder|visualizations
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:ObjectNeighborCount
    Select method for constructing file names:From image filename
    Select image name for file prefix:soma
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SomaNeuriteCount
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|visualizations
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:38|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:SomaNeuriteUint16
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:SomaNeuriteUint16
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|visualizations
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:39|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:SomaNeuriteGrayscale
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:SomaNeuriteGS
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|visualizations
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:SomaNeuriteColor
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:SomaNeuriteColor
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|visualizations
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:41|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:SomaSkelNeuriteUint16
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:SomaSkelNeuriteUint16
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|visualizations
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:42|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:SomaSkelNeuriteGrayscale
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:SomaSkelNeuriteGS
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|visualizations
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:43|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
    Select the type of image to save:Image
    Select the image to save:SomaSkelNeuriteColor
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:SomaSkelNeuriteColor
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|visualizations
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:44|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|Z:\Active_Users_Data\Neil\Analyses\Results\dry\xenium\src\3_cellprofiler\output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:neurite|Granularity_13_IllumCorrBF,neurite|Granularity_13_BF,neurite|Granularity_13_BFP,neurite|Granularity_4_BF,neurite|Granularity_4_BFP,neurite|Granularity_4_IllumCorrBF,neurite|Granularity_7_IllumCorrBF,neurite|Granularity_7_BFP,neurite|Granularity_7_BF,neurite|Granularity_11_IllumCorrBF,neurite|Granularity_11_BFP,neurite|Granularity_11_BF,neurite|Granularity_5_BF,neurite|Granularity_5_BFP,neurite|Granularity_5_IllumCorrBF,neurite|Granularity_8_BF,neurite|Granularity_8_BFP,neurite|Granularity_8_IllumCorrBF,neurite|Granularity_6_IllumCorrBF,neurite|Granularity_6_BF,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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